PsychoPy2experiment version="3.1.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['MTurk Code'], expName, expInfo['date'])
  Experiment info = {'MTurk Code': '', 'session': '001', 'Sex': '', 'Race': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = ITC_SDRD
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Routines
  Routine Q1
    TextComponent Question1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose a social experience over a non-social experience?
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    TextComponent scale_msg1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scale_msg2
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    TextComponent scale_msg3
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
      storeHistory = True
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  Routine Q3
    TextComponent Question3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose experiences involving friends over experiences involving family?
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    TextComponent scalemsg1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent text_2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text_4
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_3
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine Q2
    TextComponent Question2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose a non-social experience over a social experience?
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    TextComponent scale1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scale2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine Q5
    TextComponent Question5
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How much did you enjoy participating?
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    TextComponent scale_1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Not at all (1)
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    TextComponent text_5
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text_6
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Much (7)
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    RatingScaleComponent rating_5
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine ISI2
    TextComponent text4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Choice
    TextComponent Immed_Choice_Box
      letterHeight = 0.1
      pos = (-0.5, 0.0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Immed_Choice_Text
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    TextComponent Delay_Choice_Box
      letterHeight = 0.1
      pos = (0.5, 0.0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Delay_Choice_Text
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    ImageComponent image
      image = money.png
      pos = (0, 0.5)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    KeyboardComponent Response
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      End Routine:
        if (Response.keys == '1'):
            doImmed_Decision = 1
        else:
            doImmed_Decision = 0

        if (Response.keys == '2'):
            doDelay_Decision = 1
        else:
            doDelay_Decision = 0
  Routine Q4
    TextComponent Question4
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose experiences involving family over experiences involving a significant other
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    TextComponent scales1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scales2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent scales3
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_4
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine social1
    TextComponent leftbox1
      font = Times New Roman
      letterHeight = 0.094
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Left1
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    TextComponent rightbox1
      font = Times New Roman
      letterHeight = 0.094
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Right1
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    KeyboardComponent response1
      allowedKeys [set every repeat] = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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    TextComponent money3
      letterHeight = 0.1
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $leftmoney1
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    TextComponent money4
      letterHeight = 0.1
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $rightmoney1
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.5, 0.1), opacity = 1)
        border_left = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.5, 0.1), opacity = 1)
      Each Frame:
        if response1.keys == '1':
            border_left.autoDraw=True

        if response1.keys =='2':
            border_right.autoDraw=True




        if money3.status==FINISHED:
            border_left.autoDraw = False
        if money4.status==FINISHED:
            border_right.autoDraw = False
    TextComponent blank1
      letterHeight = 0.1
      startVal [time (s)] = $border_right. autoDraw==False
      stopVal [duration (s)] = 1.0
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  Routine Thank_You
    TextComponent ThankYou
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Thank you for participating!

        Please notify the experimenter before moving on to the final
        part of the task
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Introduction
    TextComponent Instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this task you will be choosing between an immediate reward or a delayed reward.

        In the following slides:
        Press 1= choose immediate reward
        Press 2= choose delayed reward

        When you are ready, press the SPACEBAR to start
    KeyboardComponent spacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent ITI_Stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
      text = +
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  Routine Response_Color
  Routine Immed_Decision
    TextComponent Immed_Choice_BoxA
      color = red
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Immed_Choice_Text
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    TextComponent Delay_Choice_BoxA
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Delay_Choice_Text
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    ImageComponent Immed_Decision_Stim
      image = money.png
      pos = (0, 0.5)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Delay_Decision
    TextComponent Immed_Choice_BoxB
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Immed_Choice_Text
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    TextComponent Delay_Choice_BoxB
      color [set every repeat] = red
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.1
      pos [set every repeat] = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Delay_Choice_Text
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    ImageComponent Delay_Decision_Stim
      image = money.png
      pos = (0, 0.5)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Introduction
  LoopInitiator Loop loopType="TrialHandler"
    conditionsFile = IntertemporalChoice_17item_test.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Immed', 11), ('Delay', 25), ('Time', 5), ('ITI', 6)]),
      OrderedDict([('Immed', 11), ('Delay', 30), ('Time', 11), ('ITI', 4)]),
      OrderedDict([('Immed', 12), ('Delay', 30), ('Time', 38), ('ITI', 4)]),
      OrderedDict([('Immed', 12), ('Delay', 35), ('Time', 76), ('ITI', 6)]),
      OrderedDict([('Immed', 16), ('Delay', 25), ('Time', 113), ('ITI', 5)]),
      OrderedDict([('Immed', 16), ('Delay', 25), ('Time', 70), ('ITI', 6)]),
      OrderedDict([('Immed', 18), ('Delay', 30), ('Time', 67), ('ITI', 4)]),
      OrderedDict([('Immed', 19), ('Delay', 25), ('Time', 20), ('ITI', 4)]),
      OrderedDict([('Immed', 21), ('Delay', 30), ('Time', 171), ('ITI', 4)]),
      OrderedDict([('Immed', 25), ('Delay', 35), ('Time', 4), ('ITI', 5)]),
      OrderedDict([('Immed', 30), ('Delay', 35), ('Time', 3), ('ITI', 4)]),
      OrderedDict([('Immed', 32), ('Delay', 35), ('Time', 59), ('ITI', 4)]),
      OrderedDict([('Immed', 30), ('Delay', 35), ('Time', 42), ('ITI', 5)]),
      OrderedDict([('Immed', 15), ('Delay', 30), ('Time', 158), ('ITI', 6)]),
      OrderedDict([('Immed', 31), ('Delay', 35), ('Time', 129), ('ITI', 4)]),
      OrderedDict([('Immed', 13), ('Delay', 35), ('Time', 27), ('ITI', 4)]),
      OrderedDict([('Immed', 17), ('Delay', 25), ('Time', 9), ('ITI', 4)])]
    Routine Choice
    LoopInitiator Immed_Decision_Loop loopType="TrialHandler"
      loopType = sequential
      nReps = $doImmed_Decision
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      Routine Immed_Decision
      Routine ITI
    LoopTerminator Immed_Decision_Loop
    LoopInitiator Delay_Decision_Loop loopType="TrialHandler"
      loopType = sequential
      nReps = $doDelay_Decision
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      Routine Delay_Decision
      Routine ITI
    LoopTerminator Delay_Decision_Loop
  LoopTerminator Loop
  Routine Thank_You
  LoopInitiator questions loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine Q1
    Routine Q2
    Routine Q3
    Routine Q4
    Routine Q5
  LoopTerminator questions
